PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'taskVer': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1088, 614]
  expName = vSearchNewAlpha5
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Routines
  Routine end
    TextComponent endText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This is the end of the experiment. Thank you for your time. Please remember to return to the questionnaire to carry on with the study. Press ‘space’ to exit.
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    KeyboardComponent endResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    CodeComponent trialCode
      Code Type = Auto->JS
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      Begin Routine:
        shuffle(coorArr)

        loc1=1.5
        loc2=1.5
        loc3=1.5
        loc4=1.5
        loc5=1.5
        loc6=1.5
        loc7=1.5
        loc8=1.5
        loc9=1.5
        loc10=1.5
        loc11=1.5
        loc12=1.5
        loc13=1.5
        loc14=1.5
        loc15=1.5
        loc16=1.5
        loc17=1.5
        loc18=1.5
        loc19=1.5
        loc20=1.5
        loc21=1.5
        loc22=1.5
        loc23=1.5
        loc24=1.5
        loc25=1.5
        loc26=1.5
        loc27=1.5
        loc28=1.5
        loc29=1.5
        loc30=1.5
        loc31=1.5
        loc32=1.5
        loc33=1.5
        loc34=1.5
        loc35=1.5
        loc36=1.5
        loc37=1.5
        loc38=1.5

        if stimArr[trials.thisN] == 1:
            loc1=coorArr[0][0]
            loc2=coorArr[0][1]
            loc3=coorArr[1][0]
            loc4=coorArr[1][1]
            loc5=coorArr[2][0]
            loc6=coorArr[2][1]
            loc7=coorArr[3][0]
            loc8=coorArr[3][1]
            loc9=coorArr[4][0]
            loc10=coorArr[4][1]
            loc11=coorArr[5][0]
            loc12=coorArr[5][1]

        if stimArr[trials.thisN] == 2:
            loc1=coorArr[0][0]
            loc2=coorArr[0][1]
            loc3=coorArr[1][0]
            loc4=coorArr[1][1]
            loc5=coorArr[2][0]
            loc6=coorArr[2][1]
            loc7=coorArr[3][0]
            loc8=coorArr[3][1]
            loc9=coorArr[4][0]
            loc10=coorArr[4][1]
            loc11=coorArr[5][0]
            loc12=coorArr[5][1]
            loc13=coorArr[6][0]
            loc14=coorArr[6][1]
            loc15=coorArr[7][0]
            loc16=coorArr[7][1]
            loc17=coorArr[8][0]
            loc18=coorArr[8][1]
            loc19=coorArr[9][0]
            loc20=coorArr[9][1]
            loc21=coorArr[10][0]
            loc22=coorArr[10][1]
            loc23=coorArr[11][0]
            loc24=coorArr[11][1]

        if stimArr[trials.thisN] == 3:
            loc1=coorArr[0][0]
            loc2=coorArr[0][1]
            loc3=coorArr[1][0]
            loc4=coorArr[1][1]
            loc5=coorArr[2][0]
            loc6=coorArr[2][1]
            loc7=coorArr[3][0]
            loc8=coorArr[3][1]
            loc9=coorArr[4][0]
            loc10=coorArr[4][1]
            loc11=coorArr[5][0]
            loc12=coorArr[5][1]
            loc13=coorArr[6][0]
            loc14=coorArr[6][1]
            loc15=coorArr[7][0]
            loc16=coorArr[7][1]
            loc17=coorArr[8][0]
            loc18=coorArr[8][1]
            loc19=coorArr[9][0]
            loc20=coorArr[9][1]
            loc21=coorArr[10][0]
            loc22=coorArr[10][1]
            loc23=coorArr[11][0]
            loc24=coorArr[11][1]
            loc25=coorArr[12][0]
            loc26=coorArr[12][1]
            loc27=coorArr[13][0]
            loc28=coorArr[13][1]
            loc29=coorArr[14][0]
            loc30=coorArr[14][1]
            loc31=coorArr[15][0]
            loc32=coorArr[15][1]
            loc33=coorArr[16][0]
            loc34=coorArr[16][1]
            loc35=coorArr[17][0]
            loc36=coorArr[17][1]

        if stimArr[trials.thisN] == 4:
            loc1=coorArr[0][0]
            loc2=coorArr[0][1]
            loc5=coorArr[2][0]
            loc6=coorArr[2][1]
            loc7=coorArr[3][0]
            loc8=coorArr[3][1]
            loc9=coorArr[4][0]
            loc10=coorArr[4][1]
            loc11=coorArr[5][0]
            loc12=coorArr[5][1]
            loc37=coorArr[24][0]
            loc38=coorArr[24][1]

        if stimArr[trials.thisN] == 5:
            loc1=coorArr[0][0]
            loc2=coorArr[0][1]
            loc3=coorArr[1][0]
            loc4=coorArr[1][1]
            loc5=coorArr[2][0]
            loc6=coorArr[2][1]
            loc9=coorArr[4][0]
            loc10=coorArr[4][1]
            loc11=coorArr[5][0]
            loc12=coorArr[5][1]
            loc37=coorArr[24][0]
            loc38=coorArr[24][1]

        if stimArr[trials.thisN] == 6:
            loc1=coorArr[0][0]
            loc2=coorArr[0][1]
            loc3=coorArr[1][0]
            loc4=coorArr[1][1]
            loc5=coorArr[2][0]
            loc6=coorArr[2][1]
            loc7=coorArr[3][0]
            loc8=coorArr[3][1]
            loc9=coorArr[4][0]
            loc10=coorArr[4][1]
            loc37=coorArr[24][0]
            loc38=coorArr[24][1]

        if stimArr[trials.thisN] == 7:
            loc1=coorArr[0][0]
            loc2=coorArr[0][1]
            loc5=coorArr[2][0]
            loc6=coorArr[2][1]
            loc7=coorArr[3][0]
            loc8=coorArr[3][1]
            loc9=coorArr[4][0]
            loc10=coorArr[4][1]
            loc11=coorArr[5][0]
            loc12=coorArr[5][1]
            loc13=coorArr[6][0]
            loc14=coorArr[6][1]
            loc15=coorArr[7][0]
            loc16=coorArr[7][1]
            loc17=coorArr[8][0]
            loc18=coorArr[8][1]
            loc19=coorArr[9][0]
            loc20=coorArr[9][1]
            loc21=coorArr[10][0]
            loc22=coorArr[10][1]
            loc23=coorArr[11][0]
            loc24=coorArr[11][1]
            loc37=coorArr[24][0]
            loc38=coorArr[24][1]

        if stimArr[trials.thisN] == 8:
            loc1=coorArr[0][0]
            loc2=coorArr[0][1]
            loc3=coorArr[1][0]
            loc4=coorArr[1][1]
            loc5=coorArr[2][0]
            loc6=coorArr[2][1]
            loc9=coorArr[4][0]
            loc10=coorArr[4][1]
            loc11=coorArr[5][0]
            loc12=coorArr[5][1]
            loc13=coorArr[6][0]
            loc14=coorArr[6][1]
            loc15=coorArr[7][0]
            loc16=coorArr[7][1]
            loc17=coorArr[8][0]
            loc18=coorArr[8][1]
            loc19=coorArr[9][0]
            loc20=coorArr[9][1]
            loc21=coorArr[10][0]
            loc22=coorArr[10][1]
            loc23=coorArr[11][0]
            loc24=coorArr[11][1]
            loc37=coorArr[24][0]
            loc38=coorArr[24][1]

        if stimArr[trials.thisN] == 9:
            loc1=coorArr[0][0]
            loc2=coorArr[0][1]
            loc3=coorArr[1][0]
            loc4=coorArr[1][1]
            loc5=coorArr[2][0]
            loc6=coorArr[2][1]
            loc7=coorArr[3][0]
            loc8=coorArr[3][1]
            loc9=coorArr[4][0]
            loc10=coorArr[4][1]
            loc13=coorArr[6][0]
            loc14=coorArr[6][1]
            loc15=coorArr[7][0]
            loc16=coorArr[7][1]
            loc17=coorArr[8][0]
            loc18=coorArr[8][1]
            loc19=coorArr[9][0]
            loc20=coorArr[9][1]
            loc21=coorArr[10][0]
            loc22=coorArr[10][1]
            loc23=coorArr[11][0]
            loc24=coorArr[11][1]
            loc37=coorArr[24][0]
            loc38=coorArr[24][1]

        if stimArr[trials.thisN] == 10:
            loc1=coorArr[0][0]
            loc2=coorArr[0][1]
            loc5=coorArr[2][0]
            loc6=coorArr[2][1]
            loc7=coorArr[3][0]
            loc8=coorArr[3][1]
            loc9=coorArr[4][0]
            loc10=coorArr[4][1]
            loc11=coorArr[5][0]
            loc12=coorArr[5][1]
            loc13=coorArr[6][0]
            loc14=coorArr[6][1]
            loc15=coorArr[7][0]
            loc16=coorArr[7][1]
            loc17=coorArr[8][0]
            loc18=coorArr[8][1]
            loc19=coorArr[9][0]
            loc20=coorArr[9][1]
            loc21=coorArr[10][0]
            loc22=coorArr[10][1]
            loc23=coorArr[11][0]
            loc24=coorArr[11][1]
            loc25=coorArr[12][0]
            loc26=coorArr[12][1]
            loc27=coorArr[13][0]
            loc28=coorArr[13][1]
            loc29=coorArr[14][0]
            loc30=coorArr[14][1]
            loc31=coorArr[15][0]
            loc32=coorArr[15][1]
            loc33=coorArr[16][0]
            loc34=coorArr[16][1]
            loc35=coorArr[17][0]
            loc36=coorArr[17][1]
            loc37=coorArr[24][0]
            loc38=coorArr[24][1]

        if stimArr[trials.thisN] == 11:
            loc1=coorArr[0][0]
            loc2=coorArr[0][1]
            loc3=coorArr[1][0]
            loc4=coorArr[1][1]
            loc5=coorArr[2][0]
            loc6=coorArr[2][1]
            loc9=coorArr[4][0]
            loc10=coorArr[4][1]
            loc11=coorArr[5][0]
            loc12=coorArr[5][1]
            loc13=coorArr[6][0]
            loc14=coorArr[6][1]
            loc15=coorArr[7][0]
            loc16=coorArr[7][1]
            loc17=coorArr[8][0]
            loc18=coorArr[8][1]
            loc19=coorArr[9][0]
            loc20=coorArr[9][1]
            loc21=coorArr[10][0]
            loc22=coorArr[10][1]
            loc23=coorArr[11][0]
            loc24=coorArr[11][1]
            loc25=coorArr[12][0]
            loc26=coorArr[12][1]
            loc27=coorArr[13][0]
            loc28=coorArr[13][1]
            loc29=coorArr[14][0]
            loc30=coorArr[14][1]
            loc31=coorArr[15][0]
            loc32=coorArr[15][1]
            loc33=coorArr[16][0]
            loc34=coorArr[16][1]
            loc35=coorArr[17][0]
            loc36=coorArr[17][1]
            loc37=coorArr[24][0]
            loc38=coorArr[24][1]

        if stimArr[trials.thisN] == 12:
            loc1=coorArr[0][0]
            loc2=coorArr[0][1]
            loc3=coorArr[1][0]
            loc4=coorArr[1][1]
            loc5=coorArr[2][0]
            loc6=coorArr[2][1]
            loc7=coorArr[3][0]
            loc8=coorArr[3][1]
            loc9=coorArr[4][0]
            loc10=coorArr[4][1]
            loc13=coorArr[6][0]
            loc14=coorArr[6][1]
            loc15=coorArr[7][0]
            loc16=coorArr[7][1]
            loc17=coorArr[8][0]
            loc18=coorArr[8][1]
            loc19=coorArr[9][0]
            loc20=coorArr[9][1]
            loc21=coorArr[10][0]
            loc22=coorArr[10][1]
            loc23=coorArr[11][0]
            loc24=coorArr[11][1]
            loc25=coorArr[12][0]
            loc26=coorArr[12][1]
            loc27=coorArr[13][0]
            loc28=coorArr[13][1]
            loc29=coorArr[14][0]
            loc30=coorArr[14][1]
            loc31=coorArr[15][0]
            loc32=coorArr[15][1]
            loc33=coorArr[16][0]
            loc34=coorArr[16][1]
            loc35=coorArr[17][0]
            loc36=coorArr[17][1]
            loc37=coorArr[24][0]
            loc38=coorArr[24][1]

        if loc37==1.5:
            corrAns = 'm'
        else:
            corrAns='x'
    TextComponent trialFix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent trialL11
      image = L1.png
      pos [set every repeat] = [loc1,loc2]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL12
      image = L1.png
      pos [set every repeat] = [loc3,loc4]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL21
      image = L2.png
      pos [set every repeat] = [loc5,loc6]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL22
      image = L2.png
      pos [set every repeat] = [loc7,loc8]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialT11
      image = T1.png
      pos [set every repeat] = [loc9,loc10]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialT12
      image = T1.png
      pos [set every repeat] = [loc11,loc12]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL13
      image = L1.png
      pos [set every repeat] = (loc13, loc14)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL14
      image = L1.png
      pos [set every repeat] = (loc15, loc16)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL23
      image = L1.png
      pos [set every repeat] = (loc17, loc18)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL24
      image = L2.png
      pos [set every repeat] = (loc19, loc20)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialT13
      image = T1.png
      pos [set every repeat] = (loc21, loc22)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialT14
      image = T1.png
      pos [set every repeat] = (loc23, loc24)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL15
      image = L1.png
      pos [set every repeat] = (loc25, loc26)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL16
      image = L1.png
      pos [set every repeat] = (loc27, loc28)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL25
      image = L2.png
      pos [set every repeat] = (loc29, loc30)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialL26
      image = L2.png
      pos [set every repeat] = (loc31, loc32)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialT15
      image = T1.png
      pos [set every repeat] = (loc33, loc34)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialT16
      image = T1.png
      pos [set every repeat] = (loc35, loc36)
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    ImageComponent trialTT
      image = TT.png
      pos [set every repeat] = [loc37,loc38]
      size = (0.1, 0.1)
      startVal [time (s)] = 1.0
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    KeyboardComponent trialResp
      allowedKeys = 'x','m',',','n','j','k','z','c','s','d'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine setup
    CodeComponent JSCode
      Code Type = Auto->JS
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    CodeComponent setupCode
      Code Type = Auto->JS
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      Begin Experiment:
        coorArr = [[-0.4,-0.4],[-0.4,-0.2],[-0.4,0.0],[-0.4,0.2],[-0.4,0.4],[-0.2,-0.4],[-0.2,-0.2],[-0.2,0.0],[-0.2,0.2],[-0.2,0.4],[0.0,-0.4],[0.0,-0.2],[0.0,0.0],[0.0,0.2],[0.0,0.4],[0.2,-0.4],[0.2,-0.2],[0.2,0.0],[0.2,0.2],[0.2,0.4],[0.4,-0.4],[0.4,-0.2],[0.4,0.0],[0.4,0.2],[0.4,0.4]]

        stimArr = [1,1,1,1,1,1,1,1,1,2,2,2,2,2,2,2,2,2,3,3,3,3,3,3,3,3,3,4,4,4,5,5,5,6,6,6,7,7,7,8,8,8,9,9,9,10,10,10,11,11,11,12,12,12]

        taskCount = 0

        loc1=1.5
        loc2=1.5
        loc3=1.5
        loc4=1.5
        loc5=1.5
        loc6=1.5
        loc7=1.5
        loc8=1.5
        loc9=1.5
        loc10=1.5
        loc11=1.5
        loc12=1.5
        loc13=1.5
        loc14=1.5
        loc15=1.5
        loc16=1.5
        loc17=1.5
        loc18=1.5
        loc19=1.5
        loc20=1.5
        loc21=1.5
        loc22=1.5
        loc23=1.5
        loc24=1.5
        loc25=1.5
        loc26=1.5
        loc27=1.5
        loc28=1.5
        loc29=1.5
        loc30=1.5
        loc31=1.5
        loc32=1.5
        loc33=1.5
        loc34=1.5
        loc35=1.5
        loc36=1.5
        loc37=1.5
        loc38=1.5
  Routine instr
    CodeComponent instrCode
      Code Type = Auto->JS
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      Begin Routine:
        if taskCount == 0:
            instrText.text = "In this task you will see sets of shapes made of four different shapes as outlined below. Only press the ‘x’ key if you see the upright “T” shape, which is the last shape. Otherwise, press the ‘m’ key. There will be 6, 12, or 18 shapes to observe in each trial. Press ‘enter’ to continue."
        elif taskCount == 1:
            instrText.text = "A quick break before the next set of trials. Remember, only press the ‘x’ key if you see the upright “T” shape, which is the last shape below. Otherwise, press the ‘m’ key. There will be 6, 12, or 18 shapes to observe in each trial. Press ‘enter’ to continue."
        elif taskCount == 2:
            instrText.text = "A quick break before the next set of trials. Remember, only press the ‘x’ key if you see the upright “T” shape, which is the last shape below. Otherwise, press the ‘m’ key. There will be 6, 12, or 18 shapes to observe in each trial. Press ‘enter’ to continue."
        else:
            instrText.text = "A quick break before the next set of trials. Remember, only press the ‘x’ key if you see the upright “T” shape, which is the last shape below. Otherwise, press the ‘m’ key. There will be 6, 12, or 18 shapes to observe in each trial. Press ‘enter’ to continue."

        shuffle(stimArr)

        taskCount = taskCount + 1
    TextComponent instrText
      letterHeight = 0.05
      pos = [0,0.1]
      startVal [time (s)] = 0.0
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    KeyboardComponent instrResp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent l1ex
      image = L1.png
      pos = (-0.3, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent l2ex
      image = L2.png
      pos = (-0.1, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent t1ex
      image = T1.png
      pos = (0.1, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent tTex
      image = TT.png
      pos = (0.3, -0.3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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Flow
  Routine setup
  LoopInitiator tasks loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine instr
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 54
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      Routine trial
    LoopTerminator trials
  LoopTerminator tasks
  Routine end
